OpenViBE-Scenario(Creator=OpenViBE, CreatorVersion=1.3.0)
Comment
  You can browse each box' documentation by selecting the box and pressing F1
Comment
  --:: Remember to change the file
  to the one you recorded before!
Comment
  Overview

  This scenario trains the Common Spatial Pattern spatial filter
  that will be used in the further steps.

  The EEG signal is filtered in a large frequency band [8-30 Hz].

  Then the Stimulation based epoching boxes
  provide examples for the CSP Spatial Filter Trainer :
  class 1: LEFT trials
  class 2: RIGHT trials

  At the end of the training process,
  the CSP trainer outputs the stimulation
  OVTK_StimulationId_TrainCompleted on success,
  telling the Player Controller to pause the scenario.

Generic stream reader => #0
  Filename = C:/workspace/BCI/motor-imagery-CSP-v2/motor-imagery-CSP/signals/toby-1-acquisition-[2017.05.22-16.21.31].ov
#0.Output stream 2 -> Temporal filter
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 5
  Low cut frequency (Hz) = 8
  High cut frequency (Hz) = 30
  Pass band ripple (dB) = 1
-> Temporal filter => #2
  Filter method = Butterworth
  Filter type = Band stop
  Filter order = 2
  Low cut frequency (Hz) = 48
  High cut frequency (Hz) = 52
  Pass band ripple (dB) = 0.5
Input stream 1=#2, Input stream 2=#0.Output stream 3 -> Identity => #3
Input signal=#3.Output stream 1, Input stimulations=#3.Output stream 2 -> Stimulation based epoching "Left trials" => #4
  Epoch duration (in sec) = 4
  Epoch offset (in sec) = 0.5
  Stimulation to epoch from = OVTK_GDF_Left
Input signal=#3.Output stream 1, Input stimulations=#3.Output stream 2 -> Stimulation based epoching "Right trials" => #5
  Epoch duration (in sec) = 4
  Epoch offset (in sec) = 0.5
  Stimulation to epoch from = OVTK_GDF_Right
Stimulations=#3.Output stream 2, Signal condition 1=#4.Epoched signal, Signal condition 2=#5.Epoched signal -> CSP Spatial Filter Trainer
  Train Trigger = OVTK_StimulationId_Train
  Spatial filter configuration = ${Player_ScenarioDirectory}/csp-spatial-filter.cfg
  Filter dimension = 6
  Save as box config = true
-> Player Controller
  Stimulation name = OVTK_StimulationId_TrainCompleted
  Action to perform = Stop
