OpenViBE-Scenario(Creator=OpenViBE, CreatorVersion=1.3.0)
0x790d75b8 = Yann Renard / Fabien Lotte
0x9f5c4075 = Online Use
0xf6b2e3fa = Motor Imagery
0xf8034a49 = INRIA
Comment
  You can browse each box' documentation by selecting the box and pressing F1
Comment
  Overview

  This scenario can be used online once the
  CSP spatial filter and the classifier is trained.

  note: the recorded files go to the
  folder where the scenario xml is located
  (${Player_ScenarioDirectory}/).
Comment
  The CSP spatial filter produced in the previous
  scenario is used prior to the feature extraction.
Comment
  Then comes the feature extraction part.

  The signal is filtered in a large alpha/beta [8 30] Hz range.
  The filtered signal is then splitted in blocks of 1 second
  every 16th second and the logarithmic band power is
  computed thanks to the two Simple DSP and
  the Signal Average boxes.

  The matrices can then be converted in feature vectors.

  note: depending on what frequency range
  reacts best for the subject, you may have to tune
  this part of the scenario

  note: whatever change you do on this
  scenario, don't forget to do the same on the
  classifier trainer scenario
Comment
  Finally, the feature vectors are classifier with an LDA
  classifier. Note that the state vector of the classifier
  (which in the case of the LDA is the distance to the
  separation plane) is sent to the Graz Visualization
  box for feedback !

  In order to display correct feedback,
  the Graz Visualization box expects a negative
  value for one class and a positive value for the other
  class.

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal stream -> 0xc67a01dc Temporal filter
  Filter method = Butterworth
  Filter type = Band stop
  Filter order = 3
  Low cut frequency (Hz) = 48
  High cut frequency (Hz) = 52
  Pass band ripple (dB) = 0.5
-> Temporal filter => #2
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 5
  Low cut frequency (Hz) = 8
  High cut frequency (Hz) = 25
  Pass band ripple (dB) = 1
-> Spectral analysis (FFT) => #3
  Spectral components = Amplitude
#3.Amplitude -> Spectrum Average
  Considers zeros = false
#3.Amplitude -> Power spectrum display
  Minimum frequency to display = 0
  Maximum frequency to display = 40
#2 -> CSP Spatial Filter
  Spatial Filter Coefficients = -7.249808e-001 7.627847e-002 3.626756e-001 1.078915e-001 -3.698921e-001 3.254765e-001 2.874981e-001 9.949585e-002 -2.682714e-001 -5.446850e-001 7.378462e-001 -6.754096e-002 2.228810e-001 -1.509787e-001 -3.044232e-001 2.011614e-001 -6.943859e-001 4.343271e-001 2.571629e-001 3.302598e-002 -3.589224e-001 2.359309e-001 -3.128179e-001 -3.103922e-001 1.157987e-001 -5.303792e-001 5.806437e-001 -3.439183e-001 -1.865986e-001 -1.876127e-001 6.271463e-001 1.453979e-001 3.140890e-001 -6.217494e-001 -1.740839e-001 2.983775e-001 -7.098371e-001 -2.090421e-001 1.959237e-002 3.391556e-001 -2.661672e-001 4.208897e-001
  Number of Output Channels = 6
  Number of Input Channels = 7
  Filter matrix file =
  0x8d21ff41 = C:/Users/tobys/GitRepos/MindAnamorphosis/BCI/csp-spatial-filter.cfg
-> Time based epoching
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.062500
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP => #10
  Equation = log(1+x)
Data=#10, Stimulations=#0.Stimulations, Channel Units=#0.Channel units -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 1
  Vertical Scale = 50
  Vertical Offset = 0
  Time Scale = 100
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#10 -> Feature aggregator => #12
Features=#12 -> Classifier processor => #13
  Filename to load configuration from = C:/Users/tobys/GitRepos/MindAnamorphosis/BCI/motor-imagery-bci-config-classifier.cfg
#13.Probability values -> Matrix Display
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
#13.Probability values -> Level measure
#13.Probability values -> Analog VRPN Server
  Peripheral name = openvibe_vrpn_analog
Amplitude=#13.Hyperplane distance -> Graz visualization
  Show instruction = true
  Show feedback = true
  Delay feedback = false
  Show accuracy = false
  Predictions to integrate = 5
  Positive feedback only = false
Input stream 1=#0.Experiment information, Input stream 2=#0.Signal stream, Input stream 3=#0.Stimulations -> Generic stream writer
  Filename = ${Player_ScenarioDirectory}/signals/motor-imagery-csp-4-online-[$core{date}-$core{time}].ov
  Use compression = false

Frequency Band Selector
  Frequencies to select = 8:12;16:24

Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
