OpenViBE-Scenario(Creator=OpenViBE, CreatorVersion=1.3.0)
0x790d75b8 = Yann Renard
0x9f5c4075 = Signal Monitoring
0xf6b2e3fa = Motor Imagery
0xf8034a49 = INRIA
Comment
  You can browse each box' documentation by selecting the box and pressing F1
Comment
  The Temporal Filter
  box transform the signal
  so you can see what is actually
  used online.
Comment
  Overview

  This scenario can be used in order
  to check the quality of the signals
  before starting an experiment.

  One should definitely
  check the quality of the signals
  and ensure that :

  - eye blinks are visible
  - jaw clenching are visible
  - alpha waves are visible when closing eyes

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal stream -> Temporal filter
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 3.000000
  High cut frequency (Hz) = 26.000000
  Pass band ripple (dB) = 0.500000
-> Temporal filter => #2
  Filter method = Butterworth
  Filter type = Band stop
  Filter order = 2
  Low cut frequency (Hz) = 48
  High cut frequency (Hz) = 52
  Pass band ripple (dB) = 0.5
-> Spectral analysis (FFT) => #3
  Spectral components = Amplitude
#3.Amplitude -> Power spectrum display
  Minimum frequency to display = 0
  Maximum frequency to display = 40
Input stream 1=#2, Input stream 2=#0.Signal stream, Input stream 3=#0.Stimulations -> Identity => #5
  0xac367a9c = 6
Data=#5.Output stream 1, Stimulations=#5.Output stream 3 -> Signal display "Raw signals"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = false
  Multiview = false
Data=#5.Output stream 2, Stimulations=#5.Output stream 3 -> Signal display "Filtered signals"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = false
  Multiview = false
